CellProfiler_Version	2014-07-23T17:45:00 6c2d896
ChannelType_BF_image	Grayscale
ChannelType_DF_image	Grayscale
Default_InputFolder	C:\Users\alireza
Default_OutputFolder	C:\Users\alireza
ImageSet_Zip_Dictionary	[ 60  63 120 ...,  72  87  52]
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain ""Ch3"")
    Name to assign these images:BF_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""Ch6"")
    Name to assign these images:DF_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
DefineGrid:[module_num:5|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
    Name the grid:Grid
    Number of rows:15
    Number of columns:15
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
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    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:27,27
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:82,82
    Row number of the second cell:2
    Column number of the second cell:2
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:6|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
    Select the defined grid:Grid
    Name the objects to be identified:SSC
    Select object shapes and locations:Rectangle Forced Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:BF_cells_on_grid_pre
    Retain outlines of the identified objects?:No
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
MeasureGranularity:[module_num:7|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
    Image count:1
    Object count:1
    Select an image to measure:DF_image
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:5
    Select objects to measure:SSC

MeasureObjectRadialDistribution:[module_num:8|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DF_image
    Select objects to measure:SSC
    Object to use as center?:Centers of other objects
    Select objects to use as centers:SSC
    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:9|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DF_image
    Select objects to measure:SSC
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:DF_image
    Select objects to measure:SSC

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:SSC
    Calculate the Zernike features?:Yes

Smooth:[module_num:12|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
    Select the input image:BF_image
    Name the output image:SmoothedBF
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
EnhanceEdges:[module_num:13|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
    Select the input image:SmoothedBF
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ApplyThreshold:[module_num:14|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
    Select the input image:EdgedImage
    Name the output image:Threshbf
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MCT
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.0,1.0
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
Morph:[module_num:15|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
    Select the input image:Threshbf
    Name the output image:MorphBf
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:5.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:BF_image
    Name the primary objects to be identified:bf1
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Binary image
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    Select binary image:MorphBf
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:bf1
    Calculate the Zernike features?:No

IdentifyObjectsInGrid:[module_num:18|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
    Select the defined grid:Grid
    Name the objects to be identified:BF_on_grid_rect
    Select object shapes and locations:Rectangle Forced Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
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    Retain outlines of the identified objects?:No
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
RelateObjects:[module_num:19|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
    Select the input child objects:BF_on_grid_rect
    Select the input parent objects:bf1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:20|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
    Name the output objects:BF_cells_on_grid_pre
    Select the object to filter:bf1
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:BF_on_grid_rect
    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredBF_outlines
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Select the measurement to filter by:AreaShape_Area
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
IdentifyObjectsInGrid:[module_num:21|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
    Select the defined grid:Grid
    Name the objects to be identified:BF_cells_on_grid
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:BF_cells_on_grid_pre
    Retain outlines of the identified objects?:Yes
    Name the outline image:GridOutlines

MeasureGranularity:[module_num:22|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
    Image count:1
    Object count:1
    Select an image to measure:BF_image
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:5
    Select objects to measure:BF_cells_on_grid

MeasureObjectRadialDistribution:[module_num:23|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:BF_image
    Select objects to measure:BF_cells_on_grid
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:24|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:BF_image
    Select objects to measure:BF_cells_on_grid
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:BF_image
    Select objects to measure:BF_cells_on_grid

MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:BF_cells_on_grid
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|./outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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"
Run_Timestamp	2023-01-06T13:02:19.520000
